args = "inputDir=C:\Users\giaco\Documents\NVAP\NVAP\manual_test_outputs\microglia_subfunction_test_20260228_230727\input_slices;outputDir=C:\Users\giaco\Documents\NVAP\NVAP\manual_test_outputs\microglia_subfunction_test_20260228_230727\debug_capture_7\bundle_out;pixelSizeUm=1\.0;allowUiFallback=false;exitOnComplete=true;saveFrameSlices=false;relativeIntensityThreshold=2\.8;minimalMicrogliaSize=500\.0;skeletonMaxLength=450\.0;contactMaxLength=20\.0;applyMaskTarget=seg";
runMacroFile("C:\Users\giaco\Documents\NVAP\NVAP\MicrogliaMaskingIsolated\FijiRuntime\macros\Microglia_Batch_Pipeline\.ijm", args);
